PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = MID_python
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
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    KeyboardComponent StartScreen_ButtonPress
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textStartScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Beginn der Aufgabe.

        Drücken Sie zum Starten die rechte Taste.
  Routine CuePresentation
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    PolygonComponent CueCircle
      anchor = center-left
      fillColor [set every repeat] = $colour
      lineColor [set every repeat] = $colour
      pos [set every repeat] = $location
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    KeyboardComponent EarlyPressCue
      allowedKeys [set every repeat] = 'left', 'right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      store = first key
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    CodeComponent LSL_CuePresentation_code
      Code Type = Py
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      Begin Routine:
        # Pushes screen marker
        if colour == 'blue':
            screen_outlet.push_sample([screen_markers[0]]) #pushes cue_win marker
        elif colour == 'red':
            screen_outlet.push_sample([screen_markers[1]]) #pushes cue_loss marker
        elif colour == 'yellow':
            screen_outlet.push_sample([screen_markers[2]]) #pushes cue_neutral marker

        #counter used to push one button marker per trial, regardless of number of button presses.
        CuePres_marker_count = 0
      Each Frame:
        # 'Early' button marker sent if they press
        if 'right' in EarlyPressCue.keys or 'left' in EarlyPressCue.keys:
            if CuePres_marker_count == 0:
                behav_outlet.push_sample([behav_markers[0]])
                CuePres_marker_count += 1
  Routine EndScreen
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    TextComponent EndScreenText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Ende der Aufgabe.

        Danke für die Teilnahme.
  Routine Fixation2
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    PolygonComponent FixationScreen
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent EarlyPressFixation
      allowedKeys = 'left','right'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      store = first key
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    CodeComponent LSL_fixation_code
      Code Type = Py
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      Begin Routine:
        screen_outlet.push_sample([screen_markers[3]]) #pushes screen fixation marker
        fixation_marker_count = 0 # Used for pushing button presses
      Each Frame:
        # pushes button marker if they press early
        if 'right' in EarlyPressFixation.keys or 'left' in EarlyPressFixation.keys:
            if fixation_marker_count == 0:
                behav_outlet.push_sample([behav_markers[0]])
                fixation_marker_count += 1 #this avoids multiple markers to be sent in same trial
  Routine TargetPresentation
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    CodeComponent codeTargetPresTiming
      Code Type = Py
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      Begin Routine:
        # Calculates target presentation time, based on performance of last 6 trials, and
        # then on last 10 trials once that number of trials has been reached.
        # For last 6:
        # If accuracy on last 6 is greater than 66%, target is presented 20ms shorter.
        # If accuracy on last 6 is less than 66%, target is presented 50ms longer.
        # For last 10:
        # If accuracy on last 10 is greater than 60%, target is presented 20ms shorter.
        # If accuracy on last 10 is less than 60%, target is presented 50ms longer.
        # If accuracy on last 10 is 60%, target presentation time does not change.
        if trial_num <= 4:
            resp_time = resp_time;
            thisExp.addData('full_target_time', resp_time);
        elif trial_num > 5 and trial_num <= 8:
            last_6_acc = calibration_accuracy[-6:];
            acc_ratio = sum(last_6_acc) / len(last_6_acc);
            thisExp.addData('acc_ratio', acc_ratio);
            if acc_ratio <= 0.66: #target presented for 50 ms longer
                resp_time = resp_time + 0.05
                thisExp.addData('full_target_time', resp_time);
            else: #target presented for 20ms shorter
                resp_time = resp_time - 0.02
                thisExp.addData('full_target_time', resp_time);
        else:
            last_10_acc = calibration_accuracy[-10:];
            acc_ratio = sum(last_10_acc) / len(last_10_acc);
            thisExp.addData('acc_ratio', acc_ratio);
            if acc_ratio < 0.60: #target presented for 50 ms longer
                resp_time = resp_time + 0.05
                thisExp.addData('full_target_time', resp_time);
            elif acc_ratio == 0.60: #target presentation time stays the same.
                resp_time = resp_time
                thisExp.addData('full_target_time', resp_time);
            else: #target presented for 20ms shorter
                resp_time = resp_time - 0.02
                thisExp.addData('full_target_time', resp_time);
    PolygonComponent TargetPresentationScreen
      fillColor = white
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $resp_time
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    KeyboardComponent ButtonPressTarget
      allowedKeys = 'left','right'
      correctAns = $corr_button
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = resp_time
      store = first key
      storeCorrect = True
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    CodeComponent LSL_TargetPres_code
      Code Type = Py
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      Begin Routine:
        screen_outlet.push_sample([screen_markers[4]]) #pushes screen targetpres marker
        TargetPres_marker_count = 0 # used for button press markers, avoids multiple markers to be sent in same trial
      Each Frame:
        # Pushes correct or incorrect button marker
        if 'right' in ButtonPressTarget.keys or 'left' in ButtonPressTarget.keys:
            if TargetPres_marker_count == 0:
                if corr_button == 'left' and ButtonPressTarget.keys == 'left': # correct answer
                    behav_outlet.push_sample([behav_markers[1]])
                    TargetPres_marker_count += 1
                elif corr_button == 'right' and ButtonPressTarget.keys == 'right': # correct answer
                    behav_outlet.push_sample([behav_markers[1]])
                    TargetPres_marker_count += 1
                else:
                    behav_outlet.push_sample([behav_markers[2]]) # incorrect answer
                    TargetPres_marker_count += 1
    CodeComponent codeFeedbacksaving
      Code Type = Py
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      End Routine:
        feedbackver = [];
        # Used to decide feedback participants get based on cue (win, loss, neutral) and button press
        if EarlyPressCue.keys != None or EarlyPressFixation.keys != None and colour == "blue":
            feedbackver = "3"; # Early press win cue -> did not win point.
            thisExp.addData('outcome_label', "Early")
            #thisExp.addData('outcome_val', -2)
            calibration_accuracy.append(0)
        elif EarlyPressCue.keys != None or EarlyPressFixation.keys != None and colour == "red":
            feedbackver = "4"; # Early press loss cue -> lost point.
            thisExp.addData('outcome_label', "Early")
            #thisExp.addData('outcome_val', -2)
            calibration_accuracy.append(0)
        elif EarlyPressCue.keys != None or EarlyPressFixation.keys != None and colour == "yellow":
            feedbackver = "5"; # Early press neutral cue -> points stay the same.
            thisExp.addData('outcome_label', "Early")
            #thisExp.addData('outcome_val', -2)
            calibration_accuracy.append(0)
        elif ButtonPressTarget.corr == 1 and colour == "blue":
            feedbackver = "1"; # Correct press win cue -> won point.
            thisExp.addData('outcome_label', "Correct")
            #thisExp.addData('outcome_val', 1)
            calibration_accuracy.append(1)
        elif ButtonPressTarget.corr == 1 and colour == "red":
            feedbackver = "2"; # Correct press loss cue -> did not lose point.
            thisExp.addData('outcome_label', "Correct")
            #thisExp.addData('outcome_val', 1)
            calibration_accuracy.append(1)
        elif ButtonPressTarget.corr == 1 and colour == "yellow":
            feedbackver = "5"; # Correct press neutral cue -> points stay the same.
            thisExp.addData('outcome_label', "Correct")
            #thisExp.addData('outcome_val', 1)
            calibration_accuracy.append(1)
        elif ButtonPressTarget.corr == 0 and colour == "blue":
            feedbackver = "3"; # Incorrect press win cue -> did not win point.
            thisExp.addData('outcome_label', "Incorrect")
            #thisExp.addData('outcome_val', -1)
            calibration_accuracy.append(0)
        elif ButtonPressTarget.corr == 0 and colour == "yellow":
            feedbackver = "5"; # Incorrect press neutral cue -> points stay the same.
            thisExp.addData('outcome_label', "Incorrect")
            #thisExp.addData('outcome_val', -1)
            calibration_accuracy.append(0)
        else:
            feedbackver = "4"; # Incorrect press loss cue -> lost point.
            thisExp.addData('outcome_label', "Incorrect")
            #thisExp.addData('outcome_val', -1)
            calibration_accuracy.append(0)
  Routine FeedbackCode
    RoutineSettingsComponent FeedbackCode
      stopVal [duration (s)] = 1
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    CodeComponent feedbacktextcode
      Code Type = Auto->JS
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      Begin Routine:
        # Correct press win cue (blue)
        if feedbackver == "1":
            text = "Du hast einen Punkt gewonnen";
            textcolour = 'green';
            treat_counter += 1;

        # Correct press loss cue (red)
        elif feedbackver == "2":
            text = "Du hast keinen Punkt verloren";
            textcolour = 'green';

        # Incorrect press win cue (blue)
        elif feedbackver == "3":
            text = "Du hast keinen Punkt gewonnen";
            textcolour = 'red';

        # Incorrect press loss cue (red)
        elif feedbackver == "4":
            text = "Du hast einen Punkt verloren";
            textcolour = 'red';
            treat_counter -= 1;

        # Neutral cue, points unchanged (yellow)
        else: #Feedback version 5
            text = "Du hast keinen Punkt verloren";
            textcolour = 'white';
    TextComponent text_Feedback
      color [set every repeat] = $textcolour
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $text
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    TextComponent text_treatCounter
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $treat_counter
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    CodeComponent LSL_feedback_code
      Code Type = Py
      Begin Routine:
        screen_outlet.push_sample([screen_markers[5]]) #pushes screen fixation marker
  Routine ITI500
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    PolygonComponent trial_ITI
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent trial_num_code
      Code Type = Auto->JS
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      End Routine:
        # Used in codeTargetPresTiming
        trial_num = trial_num + 1;
    CodeComponent LSL_ITI500_code
      Code Type = Py
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      Begin Routine:
        screen_outlet.push_sample([screen_markers[6]]) #pushes screen ITI marker
  Routine first_ITI
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    PolygonComponent first_ITI_fig
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent leadin_ITI_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Variables used for calculating target presentation time
        # and score count
        treat_counter = 0;
        #target_pres_time = 0.4; !!Set in practice loop
        #trial_num = 0;
        #calibration_accuracy = []; !!Set in practice loop
  Routine RT_measure_start
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    TextComponent RT_measure_start_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Initiale Reaktionsgeschwindigkeit.

        Wenn das grüne Kreuz erscheint, drücken Sie so schnell wie möglich die Taste.

        Drücken Sie zum Starten die rechte Taste.
    CodeComponent RT_list_code
      Code Type = Auto->JS
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      Before Experiment:
        rt_list = []
    KeyboardComponent RT_startscreen_press
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine RT_measure_target
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    PolygonComponent RT_target_fig
      fillColor = green
      lineColor = green
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent RT_measure_response
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
      store = first key
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    CodeComponent add_RT_measure_code
      Code Type = Auto->JS
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      End Routine:
        rt_list.append(RT_measure_response.rt)

        thisExp.addData('rt_list', rt_list)
  Routine RT_measure_end
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    TextComponent RT_measure_endtext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Ende des Tests zur Initiale Reaktionsgeschwindigkeit.
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    CodeComponent RT_measuring_code
      Code Type = Auto->JS
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      Begin Routine:
        # turn the list into a numpy array that supports
        # mathematical operations better:
        import numpy as np
        rt_array = np.array(rt_list)
        mean_rt = rt_array.mean()
        sd_rt = rt_array.std()

        resp_time = mean_rt + sd_rt
  Routine RT_measure_fixation
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    PolygonComponent rt_measure_fixation
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine StartScreen_training
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    KeyboardComponent StartScreen_ButtonPress_training
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent StartScreen_text_training
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Jetzt folgen 12 Übungssitzungen.

        Drücken Sie zum Starten die rechte Taste.
    CodeComponent LSL_initiation_training_code
      Code Type = Py
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      Begin Experiment:
        # Initiate LSL
        import pylsl

        # Make stream outlets & info for each "marker" we want to push, and a corresponding outlet
        print('Creating a new streaminfo...')
        screen_info = pylsl.StreamInfo('screen_markers', 'screen_pres', 1, 0, 'string')
        behav_info = pylsl.StreamInfo('button_press', 'beh', 1, 0, 'string')

        print('Opening an outlet...')
        screen_outlet = pylsl.StreamOutlet(screen_info)
        behav_outlet = pylsl.StreamOutlet(behav_info)

        print("now sending markers...")
        screen_markers = ['Cue_win', 'Cue_loss', 'Cue_neutral', 'Fixation', 'Target', 'Feedback', 'ITI']
        behav_markers = ['Early', 'Correct', 'Incorrect']
  Routine initial_iti_training
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    PolygonComponent initial_iti_fig_training
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent initial_iti_code_training
      Code Type = Auto->JS
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      Begin Experiment:
        # Variables used for calculating target presentation time
        # and score count in practice loop
        reward_counter_training = 0;
        #target_pres_time = 0.8;
        trial_num = 0;
        calibration_accuracy = [];
  Routine CuePresentation_training
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    PolygonComponent CueCircle_training
      anchor = center-left
      fillColor [set every repeat] = $colour
      lineColor [set every repeat] = $colour
      pos [set every repeat] = $location
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    KeyboardComponent EarlyPressCue_training
      allowedKeys [set every repeat] = 'left', 'right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      store = first key
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  Routine Fixation2000_training
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    PolygonComponent Fixation2000_fig_training
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent EarlyPressFixation_training
      allowedKeys = 'left','right'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      store = first key
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  Routine TargetPresentation_training
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    CodeComponent TargetPresTiming_code_training
      Code Type = Py
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      Begin Routine:
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    PolygonComponent TargetPresentation_fig_training
      fillColor = white
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $resp_time
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    KeyboardComponent ButtonPressTarget_training
      allowedKeys = 'left','right'
      correctAns = $corr_button
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = resp_time
      store = first key
      storeCorrect = True
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    CodeComponent Feedbacksaving_code_training
      Code Type = Py
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      End Routine:
        feedbackver_training = [];
        # Prepares which feedback version is shown, based on win or loss cues and button press performance.
        if EarlyPressCue_training.keys != None or EarlyPressFixation_training.keys != None and colour == "blue":
            feedbackver_training = "3"; # Early press win cue -> did not win point.
            thisExp.addData('outcome_label_training', "Early")
            #thisExp.addData('practice_outcome_val', -2)
            calibration_accuracy.append(0)
        elif EarlyPressCue_training.keys != None or EarlyPressFixation_training.keys != None and colour == "red":
            feedbackver_training = "4"; # Early press loss cue -> lost point.
            thisExp.addData('outcome_label_training', "Early")
            #thisExp.addData('practice_outcome_val', -2)
            calibration_accuracy.append(0)
        elif EarlyPressCue_training.keys != None or EarlyPressFixation_training.keys != None and colour == "yellow":
            feedbackver_training = "5"; # Early press neutral cue -> points stay the same.
            thisExp.addData('outcome_label_training', "Early")
            #thisExp.addData('practice_outcome_val', -2)
            calibration_accuracy.append(0)
        elif ButtonPressTarget_training.corr == 1 and colour == "blue":
            feedbackver_training = "1"; # Correct press win cue -> won point.
            thisExp.addData('outcome_label_training', "Correct")
            #thisExp.addData('practice_outcome_val', 1)
            calibration_accuracy.append(1)
        elif ButtonPressTarget_training.corr == 1 and colour == "red":
            feedbackver_training = "2"; # Correct press loss cue -> did not lose point.
            thisExp.addData('outcome_label_training', "Correct")
            #thisExp.addData('practice_outcome_val', 1)
            calibration_accuracy.append(1)
        elif ButtonPressTarget_training.corr == 1 and colour == "yellow":
            feedbackver_training = "5"; # Correct press neutral cue -> points stay the same.
            thisExp.addData('outcome_label_training', "Correct")
            #thisExp.addData('practice_outcome_val', 1)
            calibration_accuracy.append(1)
        elif ButtonPressTarget_training.corr == 0 and colour == "blue":
            feedbackver_training = "3"; # Incorrect press win cue -> did not win point.
            thisExp.addData('outcome_label_training', "Incorrect")
            #thisExp.addData('practice_outcome_val', -1)
            calibration_accuracy.append(0)
        elif ButtonPressTarget_training.corr == 0 and colour == "yellow":
            feedbackver_training = "5"; # Incorrect press neutral cue -> points stay the same.
            thisExp.addData('outcome_label_training', "Incorrect")
            #thisExp.addData('practice_outcome_val', -1)
            calibration_accuracy.append(0)
        else:
            feedbackver_training = "4"; # Incorrect press loss cue -> lost point.
            thisExp.addData('outcome_label_training', "Incorrect")
            #thisExp.addData('practice_outcome_val', -1)
            calibration_accuracy.append(0)
  Routine FeedbackCode_training
    RoutineSettingsComponent FeedbackCode_training
      stopVal [duration (s)] = 1
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    CodeComponent practice_feedbacktextcode
      Code Type = Auto->JS
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      Begin Routine:
        # Correct press win cue (blue)
        if feedbackver_training == "1":
            text_training = "Du hast einen Punkt gewonnen";
            textcolour_training = 'green';
            reward_counter_training += 1;

        # Correct press loss cue (red)
        elif feedbackver_training == "2":
            text_training = "Du hast keinen Punkt verloren";
            textcolour_training = 'green';

        # Incorrect press win cue (blue)
        elif feedbackver_training == "3":
            text_training = "Du hast keinen Punkt gewonnen";
            textcolour_training = 'red';

        # Incorrect press loss cue (red)
        elif feedbackver_training == "4":
            text_training = "Du hast einen Punkt verloren";
            textcolour_training = 'red';
            reward_counter_training -= 1;

        # Neutral cue, points unchanged (yellow)
        else: #Feedback version 5
            text_training = "Du hast keinen Punkt verloren";
            textcolour_training = 'white';
    TextComponent text_Feedback_training
      color [set every repeat] = $textcolour_training
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $text_training
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    TextComponent text_treatCounter_training
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $reward_counter_training
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  Routine ITI500_training
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    PolygonComponent trial_ITI_training
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent trial_num_code_training
      Code Type = Auto->JS
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      End Routine:
        # Trial_num is used in code_TargetPresTiming
        trial_num = trial_num + 1;
  Routine EndScreen_training
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    TextComponent EndScreenText_training
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Herzlichen Glückwunsch, Sie haben die Trainingsphase erfolgreich beendet!


        Warten Sie auf den Versuchsleiter, um fortzufahren.
        (we press space after LSL, DBS tablet, synch. pulses)
    KeyboardComponent endTraining_startMain
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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Flow
  Routine RT_measure_start
  LoopInitiator RT_measure_loop loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine RT_measure_fixation
    Routine RT_measure_target
  LoopTerminator RT_measure_loop
  Routine RT_measure_end
  Routine StartScreen_training
  Routine initial_iti_training
  LoopInitiator PracticeLoop loopType="TrialHandler"
    conditionsFile = MID_conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'colour': 'blue', 'location': (-0.6, 0), 'corr_button': 'left'},
      {'colour': 'blue', 'location': (0.35, 0), 'corr_button': 'right'},
      {'colour': 'yellow', 'location': (-0.6, 0), 'corr_button': 'left'},
      {'colour': 'yellow', 'location': (0.35, 0), 'corr_button': 'right'},
      {'colour': 'red', 'location': (-0.6, 0), 'corr_button': 'left'},
      {'colour': 'red', 'location': (0.35, 0), 'corr_button': 'right'}]
    Routine CuePresentation_training
    Routine Fixation2000_training
    Routine TargetPresentation_training
    Routine FeedbackCode_training
    Routine ITI500_training
  LoopTerminator PracticeLoop
  Routine EndScreen_training
  Routine WelcomeScreen
  Routine first_ITI
  LoopInitiator MainLoop loopType="TrialHandler"
    conditionsFile = MID_conditions.xlsx
    loopType = random
    nReps = 15
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    conditions:
      [{'colour': 'blue', 'location': (-0.6, 0), 'corr_button': 'left'},
      {'colour': 'blue', 'location': (0.35, 0), 'corr_button': 'right'},
      {'colour': 'yellow', 'location': (-0.6, 0), 'corr_button': 'left'},
      {'colour': 'yellow', 'location': (0.35, 0), 'corr_button': 'right'},
      {'colour': 'red', 'location': (-0.6, 0), 'corr_button': 'left'},
      {'colour': 'red', 'location': (0.35, 0), 'corr_button': 'right'}]
    Routine CuePresentation
    Routine Fixation2
    Routine TargetPresentation
    Routine FeedbackCode
    Routine ITI500
  LoopTerminator MainLoop
  Routine EndScreen
